PsychoPy2experiment version="2026.2.4"
Settings
  Data filename = 'data/' + expInfo['participant'] + '_' + expName + '_' + expInfo['date']
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = (1024, 768)
  expName = ai_judgement
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine trial
    CodeComponent code
      Code Type = Py
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      Begin Experiment:
        # trial = ( '/img_path', subject, ai_input, correct_response )

        trial_data = [
           ['photos/Miku.jpg', 'a miku', 'AI Opinion: A Miku is present in this image.', True],
           ['photos/crow.png', 'a crow', 'A crow is a bird with wings.', True],
           ['photos/deer.png', 'a deer', 'AI Opinion: A deer is not present in this image.', False],
           ['photos/red_panda.jpg', 'a red panda', 'Red pandas are a type of panda.', False]
        ]

        num_trials = len(trial_data)
      Begin Routine:
        img, subject, ai_input, correct_response = trial_data[trials.thisRepN]
      End Routine:
        trial_data[trials.thisRepN].append(response)
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    TextComponent prompt
      letterHeight = 0.05
      pos = (0, .8)
      startVal [time (s)] = 0.0
      text [set every repeat] = $f"Is {subject} present in this image?"
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    ImageComponent image
      image [set every repeat] = $img
      pos = (0, 0.1)
      size = (1, 1)
      startVal [time (s)] = 0.0
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    TextComponent AI_input
      letterHeight = 0.05
      pos = (0, -0.5)
      startVal [time (s)] = 0.0
      text [set every repeat] = $ai_input
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    ButtonComponent yes_button
      bold = True
      callback = response = True
      fillColor = $(-0.6078, 0.6078, -0.6078)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-0.3, -0.7)
      size = (0.5, 0.1)
      startVal [time (s)] = 0
      text = yes
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    ButtonComponent no_button
      bold = True
      callback = response = False
      fillColor = $(1.0000, -1.0000, -1.0000)
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.3, -0.7)
      size = (0.5, 0.1)
      startVal [time (s)] = 0
      text = no
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  Routine finished
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    CodeComponent write_data
      Code Type = Py
      Begin Routine:
        import pandas

        session_df = pandas.DataFrame(trial_data,
                                 columns = ["image", "subject", "AI input", "correct answer", "response"])

        output_filepath = 'output/' + expInfo['participant'] + '.csv'

        session_df.to_csv(output_filepath)
Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = num_trials
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    Routine trial
  LoopTerminator trials
  Routine finished
